Journal
Description: Journal to call the AutoTracker Python script to calculate the new stage positions
Version VersionNumber=2.4
Comment: Save log file with the name of the directory and stage position number
Open Data Log
  bOpenFile = TRUE
  bOpenDDE = FALSE
  stOpenFile = "C:\AutoTracker\current_directory.LOG" Override=Variable OverrideVariable="C:\Autotracker\current_directory" +STR(MDA.Status.StagePosNum)+".LOG"
  nOpenFileMode = 0 Override=None OverrideVariable=File Mode
  stDDEContext = "" Override=None OverrideVariable=DDE Context
Log Variable
  nLogType = 1
  stVariable = "MDA.Path"
  bOneLine = FALSE
  bLogHeader = FALSE
Log Variable
  nLogType = 1
  stVariable = "MDA.BaseName"
  bOneLine = FALSE
  bLogHeader = FALSE
Log Variable
  nLogType = 1
  stVariable = "MDA.Status.StagePosNum"
  bOneLine = FALSE
  bLogHeader = FALSE
Close Data Log
IfThenElse Expression=(MDA.Status.TimePointNum =1)  and (MDA.Status.StagePosNum =1)
  CodeBlock Condition=true
    Comment: Initialize the directory by deleting old ini and log files.
    Run Program
      stCommandLine = "C:\ProgramData\Anaconda2\python.exe C:\AutoTracker\InitAutoTracker.py"
      nState = 1
      bWaitOnExec = TRUE
    Comment: Run AutoTracker to calculate the new stage positions
    Run Program
      stCommandLine = "C:\Users\iSimAcqBoxAdmin\AppData\Local\conda\conda\envs\tensorflow\python.exe C:\AutoTracker\AutoTracker_Care.py"
      nState = 1
      bWaitOnExec = FALSE
