Journal

Version VersionNumber=2.4
INI_file_name = "C:\AutoTracker\AutoTracker_Stg"+STR(MDA.Status.StagePosNum)+".INI"
Disabled Show Message and Wait
  nDisplay = 1
  iTimeout = 30
  bUseTimeout = FALSE
  stTitle = "Reading INI File"
  stMessage = "Now reading "%INI_file_name%""
  msgX = 15
  msgY = 16
IfThenElse Expression=MDA.Status.TimePointNum >1
  CodeBlock Condition=true
    Get INI String
      stIniPath = "C:\AutoTracker\AutoTracker_Stg12.INI" Override=Variable OverrideVariable=INI_file_name
      stIniSection = "Fish3_Nm4" Override=Variable OverrideVariable=MDA.Status.StagePosName
      stIniKey = "Stage.X" Override=None OverrideVariable=IniKey
      stDefaultValue = "0" Override=None OverrideVariable=DefaultValue
      stVariable = "Stage.X" Override=None OverrideVariable=Variable
    Get INI String
      stIniPath = "C:\AutoTracker\AutoTracker_Stg12.INI" Override=Variable OverrideVariable=INI_file_name
      stIniSection = "Fish3_Nm4" Override=Variable OverrideVariable=MDA.Status.StagePosName
      stIniKey = "Stage.Y" Override=None OverrideVariable=IniKey
      stDefaultValue = "0" Override=None OverrideVariable=DefaultValue
      stVariable = "Stage.Y" Override=None OverrideVariable=Variable
    Get INI String
      stIniPath = "C:\AutoTracker\AutoTracker_Stg12.INI" Override=Variable OverrideVariable=INI_file_name
      stIniSection = "Fish3_Nm4" Override=Variable OverrideVariable=MDA.Status.StagePosName
      stIniKey = "Stage.Z" Override=None OverrideVariable=IniKey
      stDefaultValue = "0" Override=None OverrideVariable=DefaultValue
      stVariable = "Stage.Z" Override=None OverrideVariable=Variable
    Assign Variable
      MDA.Stage.X = MDA.Stage.X + VAL(Stage.X)
    Assign Variable
      MDA.Stage.Y = MDA.Stage.Y + VAL(Stage.Y)
    Assign Variable
      MDA.Stage.Z = MDA.Stage.Z + VAL(Stage.Z)
    Move Stage to Absolute Position
      dpX = -511.71 Override=Variable OverrideVariable=MDA.Stage.X
      dpY = 6.02 Override=Variable OverrideVariable=MDA.Stage.Y
      dpZ = 4042.31 Override=Variable OverrideVariable=MDA.Stage.Z
    Run Program
      stCommandLine = "C:\ProgramData\Anaconda2\python.exe C:\AutoTracker\del_ini.py %INI_file_name%"
      nState = 1
      bWaitOnExec = TRUE
